PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant': 'f"{randint(0, 999999):06.0f}"', 'session': '001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = [1128, 752]
  backgroundFit = cover
  backgroundImg = Conditions/background.bmp
  expName = Experiment
  keyboardBackend = ioHub
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Routines
  Routine Welcome
    KeyboardComponent Next_Welcome
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0
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    CodeComponent Python_Eyetracking_setUp
      Code Type = Both
      Before Experiment:
        # Imports
        import pylink
        import platform
        from EyeLinkCoreGraphicsPsychoPy import EyeLinkCoreGraphicsPsychoPy
        from string import ascii_letters, digits
        import eyetracking

        # Set to False if you want to use eyetracking
        dummy_mode = True
        # Set name for data folder for EDFs
        eyetracker_data_folder = eyetracking.create_eyetracking_folder()
        # Creates by default a folder with the name "eyetracker data"


        from psychopy import sound
      Before JS Experiment:
        import * as pylink from 'pylink';
        import * as platform from 'platform';
        import {EyeLinkCoreGraphicsPsychoPy} from 'EyeLinkCoreGraphicsPsychoPy';
        import {ascii_letters, digits} from 'string';
        import * as eyetracking from 'eyetracking';
        dummy_mode = true;
        eyetracker_data_folder = eyetracking.create_eyetracking_folder();
      Begin Experiment:
        # Variable for naming EDF
        edf_fname = expInfo['participant']
        # States that EDF name should be the same as the behavioral experiment
        # Check if EDF-name is valid
        eyetracking.edf_name_check(edf_fname)
        # => should not be longer than 8 characters and only contain letters, digits and
        # underscores
        # Connects host PC and stimulus PC
        el_tracker = eyetracking.connect_tracker(dummy_mode)
        edf_file = eyetracking.open_edf_file(el_tracker, edf_fname)
        eyetracking.configure_tracker(el_tracker, dummy_mode)
      Begin JS Experiment:
        edf_fname = expInfo["participant"];
        eyetracking.edf_name_check(edf_fname);
        el_tracker = eyetracking.connect_tracker(dummy_mode);
        edf_file = eyetracking.open_edf_file(el_tracker, edf_fname);
        eyetracking.configure_tracker(el_tracker, dummy_mode);
    TextboxComponent WelcomeText_Box
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Willkommen zu unserem Experiment und vielen Dank für Ihre Teilnahme!

        Im Folgenden werden Sie ein paar kognitive Aufgaben lösen.

        Die Aufgaben werden jeweils vorher kurz erklärt.

        Ihre Daten werden selbstverständlich anonym erfasst und vertraulich behandelt.
  Routine FocusCross
    PolygonComponent Cross
      fillColor = 0.6549, 0.6549, 0.6549
      lineColor = -1.0000, -1.0000, -1.0000
      shape = cross
      size = (0.2, 0.2)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
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    CodeComponent EyeTrackingFlagFocusCross
      Code Type = Auto->JS
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      Before Experiment:
        time = 2
      Begin Routine:
        time = randint(1, 3)
        thisexp.adddata("durationCross", time)
      Each Frame:
        if t == Cross.tStart:
            el_tracker.sendMessage('FocusCrosson')
        elif t == Cross.tStop:
            el_tracker.sendMessage('FocusCrossoff')
  Routine DigitSpanCodeDisplayLoopExample
    CodeComponent CodeDigitSpanDisplayFullDuration
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            LoopExplainDigitSpan.finished = True
  Routine DigitSpanEndLoop
    CodeComponent code
      Code Type = Auto->JS
  Routine DSFindMaxEndInnerLoop
    CodeComponent CodeAfterDisplayLoop
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            LoopDigitSpan.finished = True
  Routine DSFindMaxEndOuterLoop
    CodeComponent CodeEndDigitSpanFindMax
      Code Type = Auto->JS
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      Before Experiment:
        file = open("DigitSpanMax.txt","w+")
      Begin Routine:
        if(NumberOfLoopComplete >= 3):
            NumberOfLoopComplete = 0
            CorrectDigits = []
            #pls note this is debugging to make progress :)
            if(CorrectLoops >= 2):
                CorrectLoops = 0
                CurrentDigitChecking = CurrentDigitChecking + 1
                #pls note this is debugging to make progress :)
                if CurrentDigitChecking >= 9:
                    #ends the loop even if all correct
                    #--> caps at max digitSpan
                    #saves the CurrentDigitChecking as a file for later useage
                    file.write(str(CurrentDigitChecking))

                    LoopMaxDigitSpanFind.finished = True
            else:
                CorrectLoops = 0

                #saves the CurrentDigitChecking as a file for later useage
                file.write(str(CurrentDigitChecking))

                LoopMaxDigitSpanFind.finished = True
  Routine DSExplainEndInnerLoop
    CodeComponent CodeDSExplainInnerLoopEnd
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            LoopExplainDigitSpan.finished = True
  Routine DSExplaineExample
    KeyboardComponent KeyDigitSpanExplainExample
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent code_2
      Code Type = Auto->JS
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      Before Experiment:
        filedata = 0
      Begin Routine:
        filedata = file.read(1)
        file.close()
    TextboxComponent TextExplain
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        In diesem Teil werden Ihnen Zahlenfolgen präsentiert. Ihre Aufgabe ist es, sich diese Zahlen zu merken. Anschließend geben Sie die Zahlen in der richtigen Reihenfolge mündlich an den Versuchsleiter wieder. Danach bewerten Sie auf einer Skala von 1 bis 4, wie sicher Sie sich bei Ihrer Antwort waren (1 = "gar nicht sicher", 4 = "sehr sicher"). Für die Skala verwenden Sie bitte die Knöpfe vor Ihnen. Nun werden ein paar Übungsdurchgänge folgen, in denen Sie sich mit der Aufgabe vertraut machen können.



        Drücken Sie einen beliebigen Knopf, um fortzufahren.
  Routine DSCheckFindMax
    TextboxComponent TextBoxAskForDigitSpan
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Bitte mit dem Keyboard die gezeiten Zahlen wiederholen
        (kein fixer text)
    TextComponent TextRespose
      color = -1.0000, -1.0000, -1.0000
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $respons
    KeyboardComponent KeyCheckCorrent
      allowedKeys = '1','2','3','4','5','6','7','8','9'
      forceEndRoutine = False
      startVal [time (s)] = 0.0
      store = all keys
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    CodeComponent CodeCorrectAnswer
      Code Type = Auto->JS
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      Begin Routine:
        respons = ""

        last_len = 0
        key_list = []

        responeCorrect = False
      Each Frame:
        if(len(KeyCheckCorrent.keys) > last_len):
            #handels keyupdates
            last_len = len(KeyCheckCorrent.keys);
            key_list.append(KeyCheckCorrent.keys.pop());

            respons = "".join(key_list)

            if(len(key_list) >= CurrentDigitChecking):
               if (key_list == CorrectDigits):
                    #handels when response correct;
                    CorrectLoops = CorrectLoops + 1;
               CorrectDigits.clear()
               continueRoutine = False
      End Routine:
        NumberOfLoopComplete = NumberOfLoopComplete + 1
    TextComponent Testing_1
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.1)
      startVal [time (s)] = 0.0
      text [set every frame] = $CorrectLoops
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    TextComponent Testing_2
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.2)
      startVal [time (s)] = 0.0
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      text [set every frame]:
        $CorrectDigits
    TextComponent Testing_3
      disabled = True
      letterHeight = 0.05
      pos = (0, -0.3)
      startVal [time (s)] = 0.0
      text [set every frame] = $key_list
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  Routine DSDisplayLetter
    TextComponent Text_Digit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digit
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  Routine DSSetUpVars
    CodeComponent SetUpDigitSpanFinder
      Code Type = Auto->JS
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      Before Experiment:
        #is used for the max number of digits
        #maxes at 9
        CurrentDigitChecking = 3

        #Saves the current loop number max 3
        NumberOfLoopComplete = 0

        #Saves the correct loops
        #if 2/3 --> +1 CurrentDigitChecking
        CorrectLoops = 0

        #saves the current number of digits displayed
        LoopCounter = 0

        #Array of correct Digits
        CorrectDigits = []
      Begin Routine:
        #calibration and validation
        eyetracking.calibration_validation(el_tracker, win, dummy_mode)
  Routine DSExplaineFindMax
    KeyboardComponent KeyDigitspanFindMax
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent Text_ExplainFindMax
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Hier wird der DigitSpan max gefunden
        ich habe dafür keinen fixen Text im Dokument gefunden
        sry falls ich es über sehen habe
        (space to next)
        (und es folgt das finden des digitspans --> 3-max 9 zahlen you know the rest)
  Routine DSDisplayReal
    KeyboardComponent Next_DigitSpanReal
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent TextBoxFirstHalf_IntroText
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Es folgen nun 15 Tests mit der gleichen Aufgabe.
        Wir würden sie bitten diese gleich aus zufüllen.

        Press space to continue
  Routine NBExplain
    TextComponent TextNBackExplain
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Erklärt den NBack

        Space for next
    KeyboardComponent KeyNextNBackExplain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NBDisplayDigitExplain
    TextComponent TextNBackDisplayDigit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent KeyResponseNBExplain
      allowedKeys = 'y','n'
      correctAns = $correctResponceNBack
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent NBCodeExplain
      Code Type = Auto->JS
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      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"
      Begin Routine:
        NBackOrder.append(int(Digits))

        if(len(NBackOrder) > NBackNumber):
            #if the NBackOrder is long enouth to start testing
            if(NBackOrder[len(NBackOrder) - NBackNumber - 1] == int(Digits)):
                #handels repose = correct
                correctResponceNBack = "y"
            else:
                #handels repose = wrong
                correctResponceNBack = "n"
      End Routine:
        NBackLoops = NBackLoops + 1

        #finishes the test run after 20 NBacks
        if(NBackLoops  >= 20):
            NBack.finished = True
  Routine NBFullTest
    TextComponent TextNBFullTest
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Es kommten weiter NBacks

        Space to next
    KeyboardComponent KeyResponseNBFull
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine NBackFullDisplayDigit
    TextComponent TextNBackDisplayDigitFull
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent KeyResponseNBFullTest
      allowedKeys = 'y','n'
      correctAns = $correctResponceNBack
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent NBCodeFull
      Code Type = Auto->JS
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      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"
      Begin Routine:
        NBackOrder.append(int(Digits))

        if(len(NBackOrder) > NBackNumber):
            #if the NBackOrder is long enouth to start testing
            if(NBackOrder[len(NBackOrder) - NBackNumber - 1] == int(Digits)):
                #handels repose = correct
                correctResponceNBack = "y"
            else:
                #handels repose = wrong
                correctResponceNBack = "n"
      Each Frame:
        if t == TextNBackDisplayDigitFull.tStart:
            el_tracker.sendMessage('NBFullon')
        elif t == TextNBackDisplayDigitFull.tStop:
            el_tracker.sendMessage('NBFulloff')
      End Routine:
        NBackLoops = NBackLoops + 1

        thisExp.addData('NBackFull', NBackLoops)

        #finishes the NBack after getting all the single task data
        #now 100
        if(NBackLoops  >= 100):
            NBack.finished = True
  Routine DTExplain
    KeyboardComponent KeyResponseDTExplain
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent TextBoxExplainDT
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte geben sie von 1-4 wieder wie schwer es war zu antworten
  Routine DT_DS_InnerLoopEnd
    CodeComponent DT_DS_CodeEndInnerLoop
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        #displaies the max found digits - 2
        if LoopCounter >= (CurrentDigitChecking - 2):
            LoopCounter = 0
            DT_DS_InnerLoop.finished = True
  Routine DT_NB_Display
    TextComponent DT_NB_TextDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent DT_NB_KeyResponse
      allowedKeys = 'y','n'
      correctAns = $correctResponceNBack
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      storeCorrect = True
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    CodeComponent DT_NB_CodeEndNB
      Code Type = Auto->JS
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      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"
      Begin Routine:
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      Each Frame:
        if t == DT_NB_TextDisplay.tStart:
            el_tracker.sendMessage('DTNBon')
        elif t == DT_NB_TextDisplay.tStop:
            el_tracker.sendMessage('DTNBoff')
      End Routine:
        DTNBackNumber = DTNBackNumber + 1

        thisExp.addData('DTNBackNumber', DTNBackNumber)

        #finishes the NBack after the size of DT
        #currently 10
        if(DTNBackNumber  >= 15):
            DT_NB_NBackLoop.finished = True
  Routine DT_ManageVars
    CodeComponent DT_ManageVarsCode
      Code Type = Auto->JS
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      Before Experiment:
        #holds the overall trail number
        #1-30
        DTTrailNumber = 0

        #holds the current NBack number
        #1-10
        DTNBackNumber = 0

        #holds id of the response in DS
        #1
        #pls note i am not sure how where to get this data as is audio quelle :(
        DTDigitSpanNumberResponse = 0

        #holds the response in the digitspan scala
        #1-4
        DTDigitSpanSacalaResponse = 0
      Begin Routine:
        DTTrailNumber = DTTrailNumber + 1
        thisExp.addData('DTTrailNumber ', DTTrailNumber)
  Routine DT_DS_ResponseScala
    SliderComponent DT_DS_Scala
      forceEndRoutine = True
      granularity = 1
      labels = ("sehr", "wenig", "mittel", "viel")
      letterHeight = 0.05
      pos = (0, -0.2)
      size [set every frame] = (1.0, 0.1)
      startVal [time (s)] = 0.0
      styles = choice
      ticks = (1, 2, 3, 4)
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    CodeComponent DT_DS_CodeSaveScala
      Code Type = Auto->JS
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      Each Frame:
        if t == DT_DS_TextScala.tStart:
            el_tracker.sendMessage('DTDSScalaon')
        elif t == DT_DS_TextScala.tStop:
            el_tracker.sendMessage('DTDSScalaoff')
      End Routine:
        DTDigitSpanSacalaResponse = DT_DS_Scala.getRating()
        thisExp.addData('DTDigitSpanSacalaResponse', DTNBackNumber)
    TextboxComponent TextBoxDTDSScalaResponse
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte geben sie von 1-4 wieder wie schwer es war zu antworten
  Routine EyeTrackingStart
    CodeComponent EyeTrackingStartCode
      Code Type = Auto->JS
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      Begin Routine:
        eyetracking.start_recording(el_tracker)
  Routine EyeTrackingStop
    CodeComponent EyeTrackingStopCode
      Code Type = Auto->JS
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      End Routine:
        eyetracking.stop_recording(el_tracker)
  Routine EndScreen
    TextComponent TextEndScreen
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Dane für die Teilnahme :)

        "Esc" zum verlassen
    CodeComponent EyeTrackingEndScreen
      Code Type = Auto->JS
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      Begin Routine:
        eyetracking.close_tracker_download_edf(el_tracker, edf_file, edf_fname,
        eyetracker_data_folder)
  Routine DT_DS_DisplayAudio
    SoundComponent DT_DS_Audio
      disabled = True
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent DT_DS_EyeTrackingFlag
      Code Type = Auto->JS
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      Each Frame:
        if t == DT_DS_Audio.tStart:
            el_tracker.sendMessage('DTDSon')
        elif t == DT_DS_Audio.tStop:
            el_tracker.sendMessage('DTDSoff')
    TextComponent DT_DS_TextDigit
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text = $Digit
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  Routine DT_DS_ResponeInAudio
    KeyboardComponent KeyResponseNext
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent DT_DS_EyeTrackingFlagResponse
      Code Type = Auto->JS
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      Each Frame:
        if t == DT_DS_TextResponseInAudio.tStart:
            el_tracker.sendMessage('DTDSResponseon')
        elif t == DT_DS_TextResponseInAudio.tStop:
            el_tracker.sendMessage('DTDSResponseoff')
    TextboxComponent TextBoxDTDSResponseInAudio
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte der Testperson ihre Zahlen wieder geben :)

        Danach Space drücken um weiter zu kommen
        (nicht fix)
  Routine DSDisplayAudioFindMax
    SoundComponent DSDisplayAudio
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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  Routine Complet_FindMax
    TextboxComponent TextBoxFindMaxComplet
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.05
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text:
        Die Kalibrierung ist abgeschlossen es folgt noch ein Probedurchlauf
        (nicht fix)
  Routine DS_AudioDisplayExplain
    SoundComponent DSSoundExplain
      disabled = True
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent DSCodeFullFlags
      Code Type = Auto->JS
    TextboxComponent TextBoxDigitExplain
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      text [set every repeat] = $Digit
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  Routine DS_DisplayDigitAudioFull
    SoundComponent DSDisplaySoundFull
      disabled = True
      sound = A
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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    CodeComponent DSEyeTrackingFlagFull
      Code Type = Auto->JS
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      Each Frame:
        if t == DSSound.tStart:
            el_tracker.sendMessage('DSSoundon')
        elif t == DSSound.tStop:
            el_tracker.sendMessage('DSSoundoff')
    TextComponent TextDigitDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
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      text:
        $Digit
  Routine DS_TrailsEndInnerLoop
    CodeComponent DSEndInnerLoops
      Code Type = Auto->JS
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      Begin Routine:
        LoopCounter = LoopCounter + 1

        CorrectDigits.append(str(int(Digits)))

        if LoopCounter >= CurrentDigitChecking:
            LoopCounter = 0
            DSLoopTrailsInner.finished = True
  Routine HalfWayMark
    TextboxComponent TextBox_HalfWayMark
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        We are half way there
        woho
        (space next)
    KeyboardComponent KeyResponse_HalfWayMark
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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  Routine DT_Notic_TestStats
    TextboxComponent TextBoxDTExplainOver
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte geben sie von 1-4 wieder wie schwer es war zu antworten
  Routine DS_Scala
    CodeComponent DSCodeFlagScala
      Code Type = Auto->JS
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      Each Frame:
        if t == DSSalaResponse.tStart:
            el_tracker.sendMessage('DTDSResponseon')
        elif t == DSSalaResponse.tStop:
            el_tracker.sendMessage('DTDSResponseoff')
    KeyboardComponent DSSalaResponse
      allowedKeys = '1','2','3','4'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    TextboxComponent TextBoxScalaResponse
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte geben sie von 1-4 wieder wie schwer es war zu antworten
  Routine DS_ResponseAudio
    KeyboardComponent DSAudioKeyNext
      allowedKeys = 'space'
      forceEndRoutine = True
      startVal [time (s)] = 0.0
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    CodeComponent DSCodeFlag
      Code Type = Auto->JS
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      Each Frame:
        if t == DSTextResponseAudio.tStart:
            el_tracker.sendMessage('DTDSResponseon')
        elif t == DSTextResponseAudio.tStop:
            el_tracker.sendMessage('DTDSResponseoff')
    TextboxComponent TextBoxFirstHalf_Response
      bold = False
      color = -1.0000, -1.0000, -1.0000
      editable = False
      fillColor = 0.0039, 0.0039, 0.0039
      letterHeight = 0.08
      size = (1.2, 0.7)
      startVal [time (s)] = 0.0
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      text [set every repeat]:
        Bitte der Testperson ihre Zahlen wieder geben :)

        Danach Space drücken um weiter zu kommen
Flow
  Routine Welcome
  Routine DSSetUpVars
  Routine DSExplaineFindMax
  LoopInitiator DS_FindMax_Loop loopType="TrialHandler"
    loopType = sequential
    nReps = 9
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    LoopInitiator DS_FindMax_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
        [{'Digits': 1, 'Audio': 'Conditions/Audio/1.ogg'},
        {'Digits': 2, 'Audio': 'Conditions/Audio/2.ogg'},
        {'Digits': 3, 'Audio': 'Conditions/Audio/3.ogg'},
        {'Digits': 4, 'Audio': 'Conditions/Audio/4.ogg'},
        {'Digits': 5, 'Audio': 'Conditions/Audio/5.ogg'},
        {'Digits': 6, 'Audio': 'Conditions/Audio/6.ogg'},
        {'Digits': 7, 'Audio': 'Conditions/Audio/7.ogg'},
        {'Digits': 8, 'Audio': 'Conditions/Audio/8.ogg'},
        {'Digits': 9, 'Audio': 'Conditions/Audio/9.ogg'}]
      Routine DSDisplayLetter
      Routine FocusCross
      Routine DSFindMaxEndInnerLoop
    LoopTerminator DS_FindMax_InnerLoop
    Routine DSCheckFindMax
    Routine DS_Scala
    Routine DSFindMaxEndOuterLoop
  LoopTerminator DS_FindMax_Loop
  Routine Complet_FindMax
  Routine DSExplaineExample
  LoopInitiator DS_Explain_Loop loopType="TrialHandler"
    isTrials = False
    loopType = random
    nReps = 3
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    LoopInitiator DS_Explain_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      isTrials = False
      loopType = random
      nReps = 9
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      conditions:
        [{'Digits': 1, 'Audio': 'Conditions/Audio/1.ogg'},
        {'Digits': 2, 'Audio': 'Conditions/Audio/2.ogg'},
        {'Digits': 3, 'Audio': 'Conditions/Audio/3.ogg'},
        {'Digits': 4, 'Audio': 'Conditions/Audio/4.ogg'},
        {'Digits': 5, 'Audio': 'Conditions/Audio/5.ogg'},
        {'Digits': 6, 'Audio': 'Conditions/Audio/6.ogg'},
        {'Digits': 7, 'Audio': 'Conditions/Audio/7.ogg'},
        {'Digits': 8, 'Audio': 'Conditions/Audio/8.ogg'},
        {'Digits': 9, 'Audio': 'Conditions/Audio/9.ogg'}]
      Routine DS_AudioDisplayExplain
      Routine FocusCross
      Routine DSExplainEndInnerLoop
    LoopTerminator DS_Explain_InnerLoop
    Routine DS_ResponseAudio
    Routine DS_Scala
  LoopTerminator DS_Explain_Loop
  Routine DSDisplayReal
  Routine EyeTrackingStart
  LoopInitiator DS_Trail_F_Loop loopType="TrialHandler"
    loopType = random
    nReps = 15
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    LoopInitiator DS_Trail_F_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      isTrials = False
      loopType = sequential
      nReps = 1
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      conditions:
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      Routine DS_DisplayDigitAudioFull
      Routine FocusCross
      Routine DS_TrailsEndInnerLoop
    LoopTerminator DS_Trail_F_InnerLoop
    Routine DS_ResponseAudio
    Routine DS_Scala
  LoopTerminator DS_Trail_F_Loop
  Routine EyeTrackingStop
  Routine DTExplain
  LoopInitiator DT_Explain_Loop loopType="TrialHandler"
    loopType = random
    nReps = 3
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    LoopInitiator DT_DS_Example_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
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      Routine DT_DS_DisplayAudio
      Routine FocusCross
      Routine DT_DS_InnerLoopEnd
    LoopTerminator DT_DS_Example_InnerLoop
    LoopInitiator DT_NB_Explain_Loop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
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      Routine DT_NB_Display
    LoopTerminator DT_NB_Explain_Loop
    Routine DT_DS_ResponeInAudio
    Routine DT_DS_ResponseScala
  LoopTerminator DT_Explain_Loop
  Routine DT_Notic_TestStats
  Routine EyeTrackingStart
  LoopInitiator DT_Full_Loop loopType="TrialHandler"
    loopType = random
    nReps = 15
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    Routine DT_ManageVars
    LoopInitiator DT_DS_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      isTrials = False
      loopType = random
      nReps = 9
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      conditions:
        [{'Digits': 1, 'Audio': 'Conditions/Audio/1.mp3'},
        {'Digits': 2, 'Audio': 'Conditions/Audio/2.mp3'},
        {'Digits': 3, 'Audio': 'Conditions/Audio/3.mp3'},
        {'Digits': 4, 'Audio': 'Conditions/Audio/4.mp3'},
        {'Digits': 5, 'Audio': 'Conditions/Audio/5.mp3'},
        {'Digits': 6, 'Audio': 'Conditions/Audio/6.mp3'},
        {'Digits': 7, 'Audio': 'Conditions/Audio/7.mp3'},
        {'Digits': 8, 'Audio': 'Conditions/Audio/8.mp3'},
        {'Digits': 9, 'Audio': 'Conditions/Audio/9.mp3'}]
      Routine DT_DS_DisplayAudio
      Routine FocusCross
      Routine DT_DS_InnerLoopEnd
    LoopTerminator DT_DS_InnerLoop
    LoopInitiator DT_NB_NBackLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
        [{'Digits': 1, 'Audio': 'Conditions/Audio/1.mp3'},
        {'Digits': 2, 'Audio': 'Conditions/Audio/2.mp3'},
        {'Digits': 3, 'Audio': 'Conditions/Audio/3.mp3'},
        {'Digits': 4, 'Audio': 'Conditions/Audio/4.mp3'},
        {'Digits': 5, 'Audio': 'Conditions/Audio/5.mp3'},
        {'Digits': 6, 'Audio': 'Conditions/Audio/6.mp3'},
        {'Digits': 7, 'Audio': 'Conditions/Audio/7.mp3'},
        {'Digits': 8, 'Audio': 'Conditions/Audio/8.mp3'},
        {'Digits': 9, 'Audio': 'Conditions/Audio/9.mp3'}]
      Routine DT_NB_Display
    LoopTerminator DT_NB_NBackLoop
    Routine DT_DS_ResponeInAudio
    Routine DT_DS_ResponseScala
  LoopTerminator DT_Full_Loop
  Routine HalfWayMark
  LoopInitiator DS_Second_Loop loopType="TrialHandler"
    loopType = random
    nReps = 15
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    LoopInitiator DS_SecondHalf_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
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      Routine DS_DisplayDigitAudioFull
      Routine FocusCross
      Routine DS_TrailsEndInnerLoop
    LoopTerminator DS_SecondHalf_InnerLoop
    Routine DS_ResponseAudio
    Routine DS_Scala
  LoopTerminator DS_Second_Loop
  LoopInitiator DT_SecondLoop loopType="TrialHandler"
    loopType = random
    nReps = 15
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    LoopInitiator DT_DS_Second_InnerLoop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
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      Routine DT_DS_DisplayAudio
      Routine FocusCross
      Routine DT_DS_InnerLoopEnd
    LoopTerminator DT_DS_Second_InnerLoop
    LoopInitiator DT_NB_Loop loopType="TrialHandler"
      conditionsFile = Conditions/Conditions.xlsx
      loopType = random
      nReps = 5
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      conditions:
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      Routine DT_NB_Display
    LoopTerminator DT_NB_Loop
    Routine DT_DS_ResponeInAudio
    Routine DT_DS_ResponseScala
  LoopTerminator DT_SecondLoop
  Routine EyeTrackingStop
  Routine EndScreen
