PsychoPy2experiment version="2023.1.3"
Settings
  Audio lib = ptb
  Experiment info = {'participant':'f"{randint(0, 999999):06.0f}"', 'session':'001'}
  Full-screen window = True
  Monitor = testMonitor
  Screen = 1
  Units = height
  Window size (pixels) = (1024, 768)
  expName = NBack
  keyboardBackend = ioHub
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Routines
  Routine trial
  Routine Welcome
    TextComponent Txt_Welcome
      letterHeight = 0.05
      startVal [time (s)] = 0.0
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      text:
        Welcome
        press space
    KeyboardComponent key_resp
      allowedKeys = 'space'
      forceEndRoutine = True
      saveStartStop = False
      startVal [time (s)] = 0.0
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  Routine DisplayNBack
    TextComponent Txt_DigitDisplay
      letterHeight = 0.05
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1.0
      text [set every repeat] = $Digits
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    KeyboardComponent KeyCheckCorrentNBack
      allowedKeys [set every repeat] = 'y','n'
      correctAns = $correctResponceNBack
      discard previous = False
      forceEndRoutine = False
      saveStartStop = False
      startVal [time (s)] = 0.0
      stopVal [duration (s)] = 1
      store = first key
      storeCorrect = True
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    CodeComponent CodeNBack
      Code Type = Auto->JS
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      Before Experiment:
        #stores the currtentrail number
        #gets save in the data for later usage
        trailNumber = 0
      Begin Experiment:
        #Holds the NBackOrder
        NBackOrder = []

        #What lvl of Nback currently used 1-anything
        NBackNumber = 2

        #Holds the number of loops in the nBack
        #Is used to stop the loop
        NBackLoops = 0

        #holds the correct response for the keyinput
        correctResponceNBack = "space"

        debug = 0
      Begin Routine:
        NBackOrder.append(int(Digits))

        if(len(NBackOrder) > NBackNumber):
            #if the NBackOrder is long enouth to start testing
            if(NBackOrder[len(NBackOrder) - NBackNumber - 1] == int(Digits)):
                #handels repose = correct
                correctResponceNBack = "y"
            else:
                #handels repose = wrong
                correctResponceNBack = "n"
      End Routine:
        NBackLoops = NBackLoops + 1
        trailNumber = trailNumber  + 1
        thisExp.addData('trailNumberNBack', trailNumber)
        thisExp.addData('nBackLoop', NBackLoops)

        if(NBackLoops  >= 10):
            NBack.finished = True
Flow
  Routine Welcome
  LoopInitiator NBack loopType="TrialHandler"
    conditionsFile = Conditions_Digits.xlsx
    loopType = random
    nReps = 9
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    conditions:
      [{'Digits': 1.0},
      {'Digits': 2.0},
      {'Digits': 3.0},
      {'Digits': 4.0},
      {'Digits': 5.0},
      {'Digits': 6.0},
      {'Digits': 7.0},
      {'Digits': 8.0},
      {'Digits': 9.0}]
    Routine DisplayNBack
  LoopTerminator NBack
